PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1536, 864]
  Full-screen window = True
  Save csv file = True
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = FirstRealVersion
  Screen = 1
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Routines
  Routine Break
    CodeComponent code
      Each Frame:
        if trials.thisTrialN not in [240, 480, 720]:
            continueRoutine=False
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        -- Break --

        Press 'space' to continue
    KeyboardComponent Stop_break
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 1
      store = nothing
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  Routine start
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        In this experiment you will see two circular stimuli one after the other.
        Your task is to adjust the color of the second circle in a way that it resembles as musch as possible the color of the first one.
        You can adjust the color by pressing the left and right arrow keys.
        Submit your answer by pressing Space bar.


        To start the experiment press any mouse button (needed for iohub) and then space.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent text_2
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        This is the end of the experiment.

        Thank you for your participation!
  Routine all_trials
    CodeComponent code_color
      Begin Experiment:
        from psychopy.iohub import launchHubServer, EventConstants

        io=launchHubServer(experiment_code='key_evts', psychopy_monitor_name='default')
        keyboard = io.devices.keyboard

        increment=0

        B=0

        red = 0.5

        blue = 0.5

        green =0.5

        noiseTexture = np.random.rand(256,256) * 2 - 1

        lab1=0
        rgb=0

        def lab2rgb(lab):
            thres1 = 216/24389
            thres2 = 24389/27
            thres3 = 0.0031308
            y=(lab[0]+16)/116
            x=lab[1]/500+y
            z= y-lab[2]/200
            xyz=(x,y,z)
            if ((x**3)>thres1):
                x=x**3
            else:
                x = (116*x-16)/thres2

            if lab[0]>thres1*thres2:
                y = y**3
            else:
                y = lab[0]/thres2

            if z**3>thres1:
                z=z**3
            else:
                z=(116*z-16)/thres2
            xyz=np.array((x,y,z))
            white=(0.950456,1,1.088754)
            Minv=np.array([3.2404542,-1.5371385,-0.4985314,-0.9692660,1.8760108,0.0415560,0.0556434,-0.2040259,1.0572252]).reshape(3,3)
            RGB=np.dot(Minv,xyz)
            RGBthresh = np.less(RGB,thres3)
            RGB[np.invert(RGBthresh)] = 1.055 * (RGB[np.invert(RGBthresh)]**(1/2.4)) - 0.055
            RGB[(RGBthresh)] = 12.92 * RGB[(RGBthresh)]
            RGB[np.greater(RGB,1)]=1
            RGB[np.less(RGB,0)]=0
            return(RGB);
      Begin Routine:
        #lab2rgb((20.47, -0,65, -18.63))
        if condition == 1:
         l1=50
         a1=90
         b1=trial_value*90

         lab1=(l1,a1,b1)
         rgb=lab2rgb((l1,a1,b1))
         r=rgb[0]
         g=rgb[1]
         b=rgb[2]

         L = 50
         A = 90
         B = random()*90

        if condition == 2:

         l1=50
         a1=-90
         b1=trial_value*(-90)

         lab1=(l1,a1,b1)
         rgb=lab2rgb((l1,a1,b1))
         r=rgb[0]
         g=rgb[1]
         b=rgb[2]

         L = 50
         A = -90
         B = random()*(-90)

        if condition == 3:
         l1=50
         a1=trial_value*(-90)
         b1=90

         lab1=(l1,a1,b1)
         rgb=lab2rgb((l1,a1,b1))
         r=rgb[0]
         g=rgb[1]
         b=rgb[2]

         L = 50
         A = random()*(-90)
         B = 90

        if condition == 4:
         l1=50
         a1=trial_value*90
         b1=-90

         lab1=(l1,a1,b1)
         rgb=lab2rgb((l1,a1,b1))
         r=rgb[0]
         g=rgb[1]
         b=rgb[2]

         L = 50
         A = random()*90
         B = -90

        #if condition == 1:
        #    green = random()
        #    red =1
        #    blue = 0
        #    r = 1
        #    g = trial_value
        #    b = 0

        #elif condition == 2:
        #    blue = random()
        #    red=0
        #    green=1
        #    r = 0
        #    g = 1
        #    b = trial_value

        #elif condition == 3 :
        #    red = random
        #    blue=1
        #    green=0
        #    r = trial_value
        #    g = 0
        #    b = 1

        col=lab2rgb((L,A,B))


        color= [r,g,b]
      End Routine:
        thisExp.addData('colorChosen', color)

        if condition ==1:
         thisExp.addData('chosen_B-value', B)

        if condition == 2:
         thisExp.addData('chosen_B-value', B)

        if condition == 3:
         thisExp.addData('chosen_A-value', A)

        if condition == 4:
         thisExp.addData('chosen_A-value', A)
      Each Frame:
        for event_io in keyboard.getEvents():
                if event_io.type == EventConstants.KEYBOARD_PRESS:
                # a key has been pressed. This is reported only once, so set the value
                # of the scaling factor to be used until the key is released:
                    if event_io.key == u'right':
                        increment = 0.05 # make it 1% of screen half-width longer
                    elif event_io.key == u'left':
                        increment = -0.05 # make 1% shorter
                if event_io.type == EventConstants.KEYBOARD_RELEASE:
                # the key is no longer being pressed, so stop changing the size:
                    increment = 0

            # regardless of what key is/isn't pressed, apply the current
            # scaling factor on every screen refresh

        if condition == 1: #red (yellow)

         if B>90: B =90
         if B<0: B =0

         if 0 <= B <= 90: # B between 0 and 90


                B += increment*50
                helper= lab2rgb((L,A,B))
                color = [helper[0],helper[1],helper[2]]

        if condition == 2: # green(blue)
         if B>0: B =0
         if B<-90: B =-90

         if -90 <= B <= 0: # B between -90 and 0


                B += increment*50
                helper= lab2rgb((L,A,B))
                color = [helper[0],helper[1],helper[2]]

        if condition == 3: # yellow (green)
         if A>0: A =0
         if A<-90: A =-90

         if -90 <= A <= 0: # A between -90 and 0


                A += increment*50
                helper= lab2rgb((L,A,B))
                color = [helper[0],helper[1],helper[2]]

        if condition == 4: # blue (red)
         if A>90: A =90
         if A<0: A =0

         if 0 <= A <= 90: # A between 0 and 9


                A += increment*50
                helper= lab2rgb((L,A,B))
                color = [helper[0],helper[1],helper[2]]
    PolygonComponent Inducer_stimulus
      fillColor [set every repeat] = [$r,$g,$b]
      stopVal [duration (s)] = 0.5
      lineColor [set every repeat] = [$r,$g,$b]
      startVal [time (s)] = 2
      nVertices = 90
      size = (5, 5)
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    ImageComponent Noise_patch
      stopVal [duration (s)] = 1.0
      mask = circle
      startVal [time (s)] = 2.5
      image [set every repeat] = $noiseTexture
      size = (5, 5)
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    PolygonComponent Response_stimulus
      fillColor [set every frame] = $color
      durationEstim = 5
      lineColor [set every frame] = $color
      startVal [time (s)] = 3.75
      nVertices = 90
      size = [5,5]
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    KeyboardComponent key_response
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 4
      store = first key
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    TextComponent Fixation_cross1
      text = +
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 1
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    TextComponent Fixation_cross2
      text = +
      stopVal [duration (s)] = 0.25
      startVal [time (s)] = 3.5
      letterHeight = 1
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Flow
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Larger_differences_long.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trial_value': 0.62402215623296797, 'condition': 4},
      {'trial_value': 0.29902215623296796, 'condition': 4},
      {'trial_value': 0.54902215623296802, 'condition': 4},
      {'trial_value': 0.29902215623296796, 'condition': 4},
      {'trial_value': 0.34902215623296795, 'condition': 4},
      {'trial_value': 0.049022156232967976, 'condition': 4},
      {'trial_value': 0.17402215623296796, 'condition': 4},
      {'trial_value': 0.39902215623296799, 'condition': 4},
      {'trial_value': 0.29902215623296802, 'condition': 4},
      {'trial_value': 0.37402215623296803, 'condition': 4},
      {'trial_value': 0.27402215623296799, 'condition': 4},
      {'trial_value': 0.59902215623296806, 'condition': 4},
      {'trial_value': 0.27402215623296799, 'condition': 4},
      {'trial_value': 0.024022156232968009, 'condition': 4},
      {'trial_value': 0.29902215623296802, 'condition': 4},
      {'trial_value': 0.62402215623296808, 'condition': 4},
      {'trial_value': 0.79902215623296802, 'condition': 4},
      {'trial_value': 0.67402215623296802, 'condition': 4},
      {'trial_value': 0.34902215623296801, 'condition': 4},
      {'trial_value': 0.074022156232967998, 'condition': 4},
      {'trial_value': 0.37402215623296797, 'condition': 4},
      {'trial_value': 0.59902215623296806, 'condition': 4},
      {'trial_value': 0.37402215623296797, 'condition': 4},
      {'trial_value': 0.57402215623296804, 'condition': 4},
      {'trial_value': 0.67402215623296802, 'condition': 4},
      {'trial_value': 0.74902215623296797, 'condition': 4},
      {'trial_value': 0.99902215623296797, 'condition': 4},
      {'trial_value': 0.82402215623296804, 'condition': 4}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
    Routine Break
    Routine all_trials
  LoopTerminator trials
  Routine end
