PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1536, 864]
  Full-screen window = True
  Save csv file = True
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = OneStepFurther1
  Screen = 1
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Routines
  Routine all_trials
    PolygonComponent inducer_stimulus
      fillColor [set every repeat] = [$red,$green,$blue]
      stopVal [duration (s)] = 0.5
      lineColor [set every repeat] = [$red,$green,$blue]
      startVal [time (s)] = 2
      nVertices = 90
      size = (0.5, 0.5)
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    ImageComponent Noise_patch
      stopVal [duration (s)] = 1.0
      mask = circle
      startVal [time (s)] = 2.5
      image [set every repeat] = $noiseTexture
      size = (0.5, 0.5)
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    PolygonComponent polygon
      fillColor [set every frame] = $color
      durationEstim = 5
      lineColor [set every frame] = $color
      startVal [time (s)] = 3.75
      nVertices = 90
      size = [0.5, 0.5]
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    CodeComponent code_color
      Begin Experiment:
        i = 1
      Begin Routine:
        if i <=5:
         green = random()
         red =1
         blue = 0

        if i >5:
          blue = random()
          red=0
          green=1

        if i > 10:
         red = random
         blue=1
         green=0

        color= [red, green, blue]
      End Routine:
        thisExp.addData('colorChosen', color)
        thisExp.addData('prop_red', green)


        i =i+1
      Each Frame:
        for event_io in keyboard.getEvents():
                if event_io.type == EventConstants.KEYBOARD_PRESS:
                # a key has been pressed. This is reported only once, so set the value
                # of the scaling factor to be used until the key is released:
                    if event_io.key == u'right':
                        increment = 0.05 # make it 1% of screen half-width longer
                    elif event_io.key == u'left':
                        increment = -0.05 # make 1% shorter
                if event_io.type == EventConstants.KEYBOARD_RELEASE:
                # the key is no longer being pressed, so stop changing the size:
                    increment = 0

            # regardless of what key is/isn't pressed, apply the current
            # scaling factor on every screen refresh

        if i <=5:

         if green>1: green =1
         if green<0: green =0

         if 0 <= green <= 1:


                green += increment
                color = [1,green,0]


        if i >5:

         if blue>1: blue =1
         if blue<0: blue =0

         if 0 <= blue <= 1:


                blue += increment
                color = [0,1,blue]

        if i >10:

         if red>1: red =1
         if red<0: red =0

         if 0 <= red <= 1:


                red += increment
                color = [red,0,1]
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 4
      store = first key
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    CodeComponent code
      Begin Experiment:
        from psychopy.iohub import launchHubServer, EventConstants

        io=launchHubServer(experiment_code='key_evts', psychopy_monitor_name='default')
        keyboard = io.devices.keyboard

        increment=0
        green = 0.5 # initial value of scaling factor

        color=[1,green,0]

        red = 0.5

        blue = 0.5

        green =0.5
    CodeComponent code_4
      Begin Experiment:
        noiseTexture = np.random.rand(256,256) * 2 - 1
    TextComponent Fixation_cross1
      text = +
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent Fixation_cross2
      text = +
      stopVal [duration (s)] = 0.25
      startVal [time (s)] = 3.5
      letterHeight = 0.1
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    CodeComponent code_5
      Begin Routine:
        stimulus_color = [red,green,blue]
  Routine trial_green
    PolygonComponent polygon_5
      fillColor [set every repeat] = $stimulus_color
      stopVal [duration (s)] = 0.5
      lineColor [set every repeat] = $stimulus_color
      startVal [time (s)] = 1
      nVertices = 90
      size = (0.5, 0.5)
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    PolygonComponent polygon_6
      fillColor [set every frame] = $color
      lineColor [set every frame] = $color
      startVal [time (s)] = 3
      nVertices = 90
      size = (0.5, 0.5)
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 3.5
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    CodeComponent code_2
      Begin Routine:
        color= [0,1,blue]
        blue = 0.5
      End Routine:
        thisExp.addData('colorChosen', color)
        thisExp.addData('prop_red', blue)
      Each Frame:
        for event_io in keyboard.getEvents():
                if event_io.type == EventConstants.KEYBOARD_PRESS:
                # a key has been pressed. This is reported only once, so set the value
                # of the scaling factor to be used until the key is released:
                    if event_io.key == u'right':
                        increment = 0.05 # make it 1% of screen half-width longer
                    elif event_io.key == u'left':
                        increment = -0.05 # make 1% shorter
                if event_io.type == EventConstants.KEYBOARD_RELEASE:
                # the key is no longer being pressed, so stop changing the size:
                    increment = 0

            # regardless of what key is/isn't pressed, apply the current
            # scaling factor on every screen refresh


        #if red <= 0:
         #  if event_io.key == u'left':
          #   increment = 0
           #elif event_io.key== u'right':
            # red += increment
         # color = [red, 0, 1]

        #if red >= 1:
         #  if event_io.key == u'right':
        #     increment = 0
         #  if event_io.key == u'left':
         #    red += increment

        if 0 <= blue <= 1:



                blue += increment
                color = [0,1,blue]
  Routine end
    TextComponent text_2
      text = This is the end of the experiment.
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine start
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        In this experiment you will see two circular stimuli one after the other.
        Your task is to adjust the color of the second circle in a way that it resembles as musch as possible the color of the first one.
        You can adjust the color by pressing the left and right arrow keys.
        Submit your answer by pressing Space bar.


        To start the experiment press any mouse button (needed for iohub) and then space.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_blue
    PolygonComponent polygon_3
      fillColor [set every repeat] = $stimulus_color
      stopVal [duration (s)] = 0.5
      lineColor [set every repeat] = $stimulus_color
      startVal [time (s)] = 1
      nVertices = 90
      size = (0.5, 0.5)
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    PolygonComponent polygon_4
      fillColor [set every frame] = $color
      lineColor [set every frame] = $color
      startVal [time (s)] = 3
      nVertices = 90
      size = (0.5, 0.5)
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 3.5
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    CodeComponent code_3
      Begin Routine:
        color= [red,0,1]
        red = 0.5
      End Routine:
        thisExp.addData('colorChosen', color)
        thisExp.addData('prop_red', red)
      Each Frame:
        for event_io in keyboard.getEvents():
                if event_io.type == EventConstants.KEYBOARD_PRESS:
                # a key has been pressed. This is reported only once, so set the value
                # of the scaling factor to be used until the key is released:
                    if event_io.key == u'right':
                        increment = 0.05 # make it 1% of screen half-width longer
                    elif event_io.key == u'left':
                        increment = -0.05 # make 1% shorter
                if event_io.type == EventConstants.KEYBOARD_RELEASE:
                # the key is no longer being pressed, so stop changing the size:
                    increment = 0

            # regardless of what key is/isn't pressed, apply the current
            # scaling factor on every screen refresh


        #if red <= 0:
         #  if event_io.key == u'left':
          #   increment = 0
           #elif event_io.key== u'right':
            # red += increment
         # color = [red, 0, 1]

        #if red >= 1:
         #  if event_io.key == u'right':
        #     increment = 0
         #  if event_io.key == u'left':
         #    red += increment

        if 0 <= red <= 1:



                red += increment
                color = [red,0,1]
Flow
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials_R_reduced.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'blue': 0.0, 'trial': 1, 'green': 0.6743931416422129, 'red': 1.0},
      {'blue': 0.0, 'trial': 2, 'green': 0.7543931416422128, 'red': 1.0},
      {'blue': 0.0, 'trial': 3, 'green': 0.6443931416422128, 'red': 1.0},
      {'blue': 0.0, 'trial': 4, 'green': 0.5643931416422129, 'red': 1.0},
      {'blue': 0.0, 'trial': 5, 'green': 0.6343931416422128, 'red': 1.0},
      {'blue': 0.6743931416422129, 'trial': 121, 'green': 1.0, 'red': 0.0},
      {'blue': 0.7543931416422128, 'trial': 122, 'green': 1.0, 'red': 0.0},
      {'blue': 0.6443931416422128, 'trial': 123, 'green': 1.0, 'red': 0.0},
      {'blue': 0.5643931416422129, 'trial': 124, 'green': 1.0, 'red': 0.0},
      {'blue': 0.6343931416422128, 'trial': 125, 'green': 1.0, 'red': 0.0},
      {'blue': 1.0, 'trial': 241, 'green': 0.0, 'red': 0.6743931416422129},
      {'blue': 1.0, 'trial': 242, 'green': 0.0, 'red': 0.7543931416422128},
      {'blue': 1.0, 'trial': 243, 'green': 0.0, 'red': 0.6443931416422128},
      {'blue': 1.0, 'trial': 244, 'green': 0.0, 'red': 0.5643931416422129},
      {'blue': 1.0, 'trial': 245, 'green': 0.0, 'red': 0.6343931416422128}]
    Routine all_trials
  LoopTerminator trials
  Routine end
