PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1536, 864]
  Full-screen window = True
  Save csv file = True
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = Progress
  Screen = 1
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Routines
  Routine Break
    CodeComponent code
      Each Frame:
        if trials.thisTrialN not in [5, 10]:
            continueRoutine=False
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        -- Break --

        Press 'space' to continue
    KeyboardComponent Stop_break
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 1
      store = nothing
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  Routine start
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        In this experiment you will see two circular stimuli one after the other.
        Your task is to adjust the color of the second circle in a way that it resembles as musch as possible the color of the first one.
        You can adjust the color by pressing the left and right arrow keys.
        Submit your answer by pressing Space bar.


        To start the experiment press any mouse button (needed for iohub) and then space.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent text_2
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        This is the end of the experiment.

        Thank you for your participation!
  Routine all_trials
    CodeComponent code_color
      Begin Experiment:
        from psychopy.iohub import launchHubServer, EventConstants

        io=launchHubServer(experiment_code='key_evts', psychopy_monitor_name='default')
        keyboard = io.devices.keyboard

        increment=0



        red = 0.5

        blue = 0.5

        green =0.5

        noiseTexture = np.random.rand(256,256) * 2 - 1
      Begin Routine:
        #lab2rgb((20.47, -0,65, -18.63))




        if condition == 1:
            green = random()
            red =1
            blue = 0
            r = 1
            g = trial_value
            b = 0

        elif condition == 2:
            blue = random()
            red=0
            green=1
            r = 0
            g = 1
            b = trial_value

        elif condition == 3 :
            red = random
            blue=1
            green=0
            r = trial_value
            g = 0
            b = 1

        color= [red, green, blue]
      End Routine:
        thisExp.addData('colorChosen', color)

        if condition ==1:
         thisExp.addData('prop_red', green)

        elif condition == 2:
         thisExp.addData('prop_red', blue)

        elif condition == 3:
         thisExp.addData('prop_red', red)
      Each Frame:
        for event_io in keyboard.getEvents():
                if event_io.type == EventConstants.KEYBOARD_PRESS:
                # a key has been pressed. This is reported only once, so set the value
                # of the scaling factor to be used until the key is released:
                    if event_io.key == u'right':
                        increment = 0.05 # make it 1% of screen half-width longer
                    elif event_io.key == u'left':
                        increment = -0.05 # make 1% shorter
                if event_io.type == EventConstants.KEYBOARD_RELEASE:
                # the key is no longer being pressed, so stop changing the size:
                    increment = 0

            # regardless of what key is/isn't pressed, apply the current
            # scaling factor on every screen refresh

        if condition == 1:

         if green>1: green =1
         if green<0: green =0

         if 0 <= green <= 1:


                green += increment
                color = [1,green,0]


        elif condition == 2:

         if blue>1: blue =1
         if blue<0: blue =0

         if 0 <= blue <= 1:


                blue += increment
                color = [0,1,blue]

        elif condition == 3:

         if red>1: red =1
         if red<0: red =0

         if 0 <= red <= 1:


                red += increment
                color = [red,0,1]
    PolygonComponent Inducer_stimulus
      fillColor [set every repeat] = [$r,$g,$b]
      stopVal [duration (s)] = 0.5
      lineColor [set every repeat] = [$r,$g,$b]
      startVal [time (s)] = 2
      nVertices = 90
      size = (5, 5)
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    ImageComponent Noise_patch
      stopVal [duration (s)] = 1.0
      mask = circle
      startVal [time (s)] = 2.5
      image [set every repeat] = $noiseTexture
      size = (5, 5)
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    PolygonComponent Response_stimulus
      fillColor [set every frame] = $color
      durationEstim = 5
      lineColor [set every frame] = $color
      startVal [time (s)] = 3.75
      nVertices = 90
      size = [5, 5]
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    KeyboardComponent key_response
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 4
      store = first key
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    TextComponent Fixation_cross1
      text = +
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent Fixation_cross2
      text = +
      stopVal [duration (s)] = 0.25
      startVal [time (s)] = 3.5
      letterHeight = 0.1
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Flow
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials_R_reduced_one_column.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trial_value': 0.6743931416422129, 'condition': 1},
      {'trial_value': 0.7543931416422128, 'condition': 1},
      {'trial_value': 0.6443931416422128, 'condition': 1},
      {'trial_value': 0.5643931416422129, 'condition': 1},
      {'trial_value': 0.6343931416422128, 'condition': 1},
      {'trial_value': 0.6743931416422129, 'condition': 2},
      {'trial_value': 0.7543931416422128, 'condition': 2},
      {'trial_value': 0.6443931416422128, 'condition': 2},
      {'trial_value': 0.5643931416422129, 'condition': 2},
      {'trial_value': 0.6343931416422128, 'condition': 2},
      {'trial_value': 0.6743931416422129, 'condition': 3},
      {'trial_value': 0.7543931416422128, 'condition': 3},
      {'trial_value': 0.6443931416422128, 'condition': 3},
      {'trial_value': 0.5643931416422129, 'condition': 3},
      {'trial_value': 0.6343931416422128, 'condition': 3}]
    Routine Break
    Routine all_trials
  LoopTerminator trials
  Routine end
