PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1536, 864]
  Full-screen window = True
  Save csv file = True
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = FirstRealVersion
  Screen = 1
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Routines
  Routine PracticeTrials
    CodeComponent Code
      Begin Experiment:
        #from psychopy.iohub import launchHubServer, EventConstants

        #io=launchHubServer(experiment_code='key_evts', psychopy_monitor_name='default')
        #keyboard = io.devices.keyboard

        increment=0

        B=0

        red = 0.5

        blue = 0.5

        green =0.5

        noiseTexture = np.random.rand(256,256) * 2 - 1

        lab1=0
        rgb=0

        def lab2rgb(lab):
            thres1 = 216/24389
            thres2 = 24389/27
            thres3 = 0.0031308
            y=(lab[0]+16)/116
            x=lab[1]/500+y
            z= y-lab[2]/200
            xyz=(x,y,z)
            if ((x**3)>thres1):
                x=x**3
            else:
                x = (116*x-16)/thres2

            if lab[0]>thres1*thres2:
                y = y**3
            else:
                y = lab[0]/thres2

            if z**3>thres1:
                z=z**3
            else:
                z=(116*z-16)/thres2
            xyz=np.array((x,y,z))
            white=(0.950456,1,1.088754)
            Minv=np.array([3.2404542,-1.5371385,-0.4985314,-0.9692660,1.8760108,0.0415560,0.0556434,-0.2040259,1.0572252]).reshape(3,3)
            RGB=np.dot(Minv,xyz)
            RGBthresh = np.less(RGB,thres3)
            RGB[np.invert(RGBthresh)] = 1.055 * (RGB[np.invert(RGBthresh)]**(1/2.4)) - 0.055
            RGB[(RGBthresh)] = 12.92 * RGB[(RGBthresh)]
            RGB[np.greater(RGB,1)]=1
            RGB[np.less(RGB,0)]=0
            return(RGB);
      Begin Routine:
        timer = core.Clock()
      Each Frame:
        #new inducer stim

        if (timer.getTime()<2.5 and timer.getTime()>2.0):


         l1=50
         a1=90
         b1=trial_value

         lab1=(l1,a1,b1)
         rgb=lab2rgb((l1,a1,b1))
         r=rgb[0]
         g=rgb[1]
         b=rgb[2]



         x1 = -0.1
         y1 = -0.1
         y2 = .1
         x2 = .1
         #r1=helper[0]*255
         #g1=helper[1]*255
         #b1=helper[2]*255

         vertex_list = pyglet.graphics.vertex_list(4,
         ('v2f', (x1, y1, x1, y2, x2, y2, x2, y1)),
         ('c3f', (r,g,b,r,g,b,r,g,b,r,g,b))
         )
         vertex_list.draw(pyglet.gl.GL_QUADS)




        #new response stimulus
        if (timer.getTime()>3.75):


          L=50
          A=90

          helper1=lab2rgb((L,A,lower_end))
          helper2=lab2rgb((L,A,upper_end))


          x1 = -0.5
          y1 = .7
          y2 = .4
          x2 = .5
          r1=helper1[0]
          g1=helper1[1]
          b1=helper1[2]
          r2=helper2[0]
          g2=helper2[1]
          b2=helper2[2]

          vertex_list = pyglet.graphics.vertex_list(4,
          ('v2f', (x1, y1, x1, y2, x2, y2, x2, y1)),
          ('c3f', (r1,g1,b1,r1,g1,b1,r2,g2,b2,r2,g2,b2))
          )
          vertex_list.draw(pyglet.gl.GL_QUADS)
    ImageComponent Noise_patch_P
      stopVal [duration (s)] = 1.0
      mask = circle
      startVal [time (s)] = 2.5
      image [set every repeat] = $noiseTexture
      size = (10, 10)
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    KeyboardComponent Key_response_P
      durationEstim = 1
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 4
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    TextComponent Fixation_cross1_P
      text = +
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 1
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    TextComponent Fixation_cross2_P
      text = +
      stopVal [duration (s)] = 0.25
      startVal [time (s)] = 3.5
      letterHeight = 1
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    CodeComponent code_3
      Begin Routine:
        # setup some python lists for storing info about the mouse
        mouse.x = []
        mouse.y = []
        mouse.leftButton = []
        mouse.midButton = []
        mouse.rightButton = []
        mouse.time = []
        mouse.clickReset()
      Each Frame:
        #mouse behaviour
        buttons = mouse.getPressed()
        if sum(buttons) > 0:  # ie if any button is pressed
                        x, y = mouse.getPos()
                        if(x/28>(x1) and x/28<(x2) and y/15<(y1) and y/15>(y2)):
                        #if sum(buttons) > 0:
                          mouse.x.append(x)
                          mouse.y.append(y)
                          mouse.leftButton.append(buttons[0])
                          mouse.midButton.append(buttons[1])
                          mouse.rightButton.append(buttons[2])
                          mouse.time.append(PracticeTrialsClock.getTime())
                        # abort routine on response
                          #continueRoutine = False
                          polygon.pos=[x,y]
                          mouse.clickReset()
                          #buttons=[]
                        else:
                           mouse.clickReset()
    MouseComponent mouse
      timeRelativeTo = routine
      durationEstim = 1
      forceEndRoutineOnPress = False
      startVal [time (s)] = 3.75
      saveMouseState = final
    PolygonComponent polygon
      fillColor = $[1,1,1]
      durationEstim = 0
      startVal [time (s)] = 3.75
      size = (0.01, 2)
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  Routine end
    TextComponent text_2
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        This is the end of the experiment.

        Thank you for your participation!
  Routine all_trials
    CodeComponent code_color
      Begin Experiment:
        #from psychopy.iohub import launchHubServer, EventConstants

        #io=launchHubServer(experiment_code='key_evts', psychopy_monitor_name='default')
        #keyboard = io.devices.keyboard

        increment=0

        B=0

        red = 0.5

        blue = 0.5

        green =0.5

        noiseTexture = np.random.rand(256,256) * 2 - 1

        lab1=0
        rgb=0

        def lab2rgb(lab):
            thres1 = 216/24389
            thres2 = 24389/27
            thres3 = 0.0031308
            y=(lab[0]+16)/116
            x=lab[1]/500+y
            z= y-lab[2]/200
            xyz=(x,y,z)
            if ((x**3)>thres1):
                x=x**3
            else:
                x = (116*x-16)/thres2

            if lab[0]>thres1*thres2:
                y = y**3
            else:
                y = lab[0]/thres2

            if z**3>thres1:
                z=z**3
            else:
                z=(116*z-16)/thres2
            xyz=np.array((x,y,z))
            white=(0.950456,1,1.088754)
            Minv=np.array([3.2404542,-1.5371385,-0.4985314,-0.9692660,1.8760108,0.0415560,0.0556434,-0.2040259,1.0572252]).reshape(3,3)
            RGB=np.dot(Minv,xyz)
            RGBthresh = np.less(RGB,thres3)
            RGB[np.invert(RGBthresh)] = 1.055 * (RGB[np.invert(RGBthresh)]**(1/2.4)) - 0.055
            RGB[(RGBthresh)] = 12.92 * RGB[(RGBthresh)]
            RGB[np.greater(RGB,1)]=1
            RGB[np.less(RGB,0)]=0
            return(RGB);
      Begin Routine:
        timer = core.Clock()
      Each Frame:
        #new inducer stim

        if (timer.getTime()<2.5 and timer.getTime()>2.0):


         if condition == 1:
          l1=50
          a1=90
          b1=trial_value

          lab1=(l1,a1,b1)
          rgb=lab2rgb((l1,a1,b1))
          r=rgb[0]
          g=rgb[1]
          b=rgb[2]

         if condition == 2:

          l1=50
          a1=-90
          b1=trial_value*(-1)

          lab1=(l1,a1,b1)
          rgb=lab2rgb((l1,a1,b1))
          r=rgb[0]
          g=rgb[1]
          b=rgb[2]


         if condition == 3:
          l1=50
          a1=trial_value*(-1)
          b1=90

          lab1=(l1,a1,b1)
          rgb=lab2rgb((l1,a1,b1))
          r=rgb[0]
          g=rgb[1]
          b=rgb[2]




         if condition == 4:
          l1=50
          a1=trial_value
          b1=-90

          lab1=(l1,a1,b1)
          rgb=lab2rgb((l1,a1,b1))
          r=rgb[0]
          g=rgb[1]
          b=rgb[2]



         x1 = -0.1
         y1 = -0.1
         y2 = .1
         x2 = .1
         #r1=helper[0]*255
         #g1=helper[1]*255
         #b1=helper[2]*255

         vertex_list = pyglet.graphics.vertex_list(4,
         ('v2f', (x1, y1, x1, y2, x2, y2, x2, y1)),
         ('c3f', (r,g,b,r,g,b,r,g,b,r,g,b))
         )
         vertex_list.draw(pyglet.gl.GL_QUADS)




        #new response stimulus
        if (timer.getTime()>3.75):

          if condition == 1:
           L=50
           A=90

           helper1=lab2rgb((L,A,lower_end))
           helper2=lab2rgb((L,A,upper_end))

          if condition == 2:

           L=50
           A=-90


           helper1=lab2rgb((L,A,lower_end*(-1)))
           helper2=lab2rgb((L,A,upper_end*(-1)))

          if condition == 3:
           L=50
           B=90

           helper1=lab2rgb((L,lower_end*(-1), B))
           helper2=lab2rgb((L, upper_end*(-1), B))

          if condition == 4:
           L=50
           B=-90

           helper1=lab2rgb((L,lower_end, B))
           helper2=lab2rgb((L, upper_end, B))


          x1 = -0.5
          y1 = .7
          y2 = .4
          x2 = .5
          r1=helper1[0]
          g1=helper1[1]
          b1=helper1[2]
          r2=helper2[0]
          g2=helper2[1]
          b2=helper2[2]

          vertex_list = pyglet.graphics.vertex_list(4,
          ('v2f', (x1, y1, x1, y2, x2, y2, x2, y1)),
          ('c3f', (r1,g1,b1,r1,g1,b1,r2,g2,b2,r2,g2,b2))
          )
          vertex_list.draw(pyglet.gl.GL_QUADS)
    ImageComponent Noise_patch
      stopVal [duration (s)] = 1.0
      mask = circle
      startVal [time (s)] = 2.5
      image [set every repeat] = $noiseTexture
      size = (10, 10)
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent Fixation_cross1
      text = +
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 1
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    TextComponent Fixation_cross2
      text = +
      stopVal [duration (s)] = 0.25
      startVal [time (s)] = 3.5
      letterHeight = 1
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    CodeComponent Code_mouse
      Begin Routine:
        # setup some python lists for storing info about the mouse
        Mouse2.x = []
        Mouse2.y = []
        Mouse2.leftButton = []
        Mouse2.midButton = []
        Mouse2.rightButton = []
        Mouse2.time = []
        Mouse2.clickReset()
        Stick.pos=[0,0]
      Each Frame:
        #mouse behaviour
        buttons = Mouse2.getPressed()
        if sum(buttons) > 0:  # ie if any button is pressed
                        x, y = Mouse2.getPos()
                        if(x/28>(x1) and x/28<(x2) and y/15<(y1) and y/15>(y2)):
                        #if sum(buttons) > 0:
                          Mouse2.x.append(x)
                          Mouse2.y.append(y)
                          Mouse2.leftButton.append(buttons[0])
                          Mouse2.midButton.append(buttons[1])
                          Mouse2.rightButton.append(buttons[2])
                          Mouse2.time.append(PracticeTrialsClock.getTime())
                        # abort routine on response
                          #continueRoutine = False
                          Stick.pos=[x,y]
                          Mouse2.clickReset()
                          #buttons=[]
                        else:
                           Mouse2.clickReset()
    KeyboardComponent Key_response2
      durationEstim = 1
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 4
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    MouseComponent Mouse2
      timeRelativeTo = routine
      durationEstim = 1
      forceEndRoutineOnPress = False
      startVal [time (s)] = 3.75
      saveMouseState = final
    PolygonComponent Stick
      fillColor = $[1,1,1]
      durationEstim = 0
      startVal [time (s)] = 3.75
      size = (0.01, 2)
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  Routine Break
    CodeComponent code
      Each Frame:
        if trials.thisTrialN not in [210, 420, 630]:
            continueRoutine=False
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        -- Break --

        Press 'space' to continue
    KeyboardComponent Stop_break
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 1
      store = nothing
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  Routine start
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.9
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      text:
        You will see a small, rectangular color stimulus flash very quickly on the screen.
        After it, a response bar  showing a spectrum of colors will appear. The colors vary only from left to right, they do not change from top to bottom.
        Your task is to observe the response bar and find the color which most resembles the color of the small rectangle.
        To selecet the color, position the pointer of the mouse on top of it and press space to submit your answer.

        Please, try to be as accurate as possible, response time is not important!


        You first have 3 practice trials.

        To start the experiment press any mouse button (needed for iohub) and then space.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Begin Experiment:
        import pyglet
  Routine Real_experiment
    TextComponent text_4
      text = Press "space" to start the actual experiment.
      startVal [time (s)] = 0.0
      letterHeight = 1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 1
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Flow
  Routine start
  LoopInitiator Practice_trials loopType="TrialHandler"
    conditionsFile = Data_bar_practice_trials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'lower_end': 21.306452067797949, 'trial_value': 42.850446391385049, 'upper_end': 51.306452067797949, 'condition': 1},
      {'lower_end': 25.50834673274526, 'trial_value': 39.350446391385049, 'upper_end': 55.50834673274526, 'condition': 1},
      {'lower_end': 28.20533757471501, 'trial_value': 37.350446391385049, 'upper_end': 58.20533757471501, 'condition': 1}]
    Routine PracticeTrials
  LoopTerminator Practice_trials
  Routine Real_experiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Data_bar_practice_trials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'lower_end': 21.306452067797949, 'trial_value': 42.850446391385049, 'upper_end': 51.306452067797949, 'condition': 1},
      {'lower_end': 25.50834673274526, 'trial_value': 39.350446391385049, 'upper_end': 55.50834673274526, 'condition': 1},
      {'lower_end': 28.20533757471501, 'trial_value': 37.350446391385049, 'upper_end': 58.20533757471501, 'condition': 1}]
    Routine Break
    Routine all_trials
  LoopTerminator trials
  Routine end
