PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = cielab
  Screen = 1
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Routines
  Routine trial
    PolygonComponent Red
      fillColor = $[0.95, -0.21, 0.48]
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0
      size = (0.5, 0.5)
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    PolygonComponent Red_and_yellow
      fillColor = $[0.98, -0.23, -0.13]
      stopVal [duration (s)] = 3
      startVal [time (s)] = 3
      size = (0.5, 0.5)
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    PolygonComponent Green
      fillColor = $[-0.47, 0.58, 0.45]
      stopVal [duration (s)] = 3
      startVal [time (s)] = 6
      size = (0.5, 0.5)
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    PolygonComponent Green_and_blue
      fillColor = $[-0.76,0.6, 1.07]
      stopVal [duration (s)] = 3
      startVal [time (s)] = 9
      size = (0.5, 0.5)
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    PolygonComponent Yellow
      fillColor = $[0.54,0.46, -0.19]
      stopVal [duration (s)] = 3
      startVal [time (s)] = 12
      size = (0.5, 0.5)
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    PolygonComponent Yellow_and_green
      fillColor = $[-0.37, 0.58, -0.22]
      stopVal [duration (s)] = 3
      startVal [time (s)] = 15
      size = (0.5, 0.5)
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    PolygonComponent Blue
      fillColor = $[-0.44, 0.49, 1.08]
      stopVal [duration (s)] = 3
      startVal [time (s)] = 18
      size = (0.5, 0.5)
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    PolygonComponent Blue_and_red
      fillColor = $[0.76, -0.12, 1.08]
      stopVal [duration (s)] = 3
      startVal [time (s)] = 21
      size = (0.5, 0.5)
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Flow
  Routine trial
